PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['info/A7_Project1_PIS-1.png', 'info/A7_Project1_PIS-2.png', 'info/A7_Project1_PIS-3.png', 'info/A7_Project1_PIS-4.png', 'consent.csv', 'index.html', 'instructions.csv', 'readme.md', 'slider.png', 'map_generator/maps/AC49_extend_blank.png', 'map_generator/maps/AC49_extend_label.png', 'map_generator/maps/AC49_trunc_blank.png', 'map_generator/maps/AC49_trunc_label.png', 'map_generator/maps/AC50_extend_blank.png', 'map_generator/maps/AC50_extend_label.png', 'map_generator/maps/AC50_trunc_blank.png', 'map_generator/maps/AC50_trunc_label.png', 'map_generator/maps/AC51_extend_blank.png', 'map_generator/maps/AC51_extend_label.png', 'map_generator/maps/AC51_trunc_blank.png', 'map_generator/maps/AC51_trunc_label.png', 'map_generator/maps/AC52_extend_blank.png', 'map_generator/maps/AC52_extend_label.png', 'map_generator/maps/AC52_trunc_blank.png', 'map_generator/maps/AC52_trunc_label.png', 'map_generator/maps/AC53_extend_blank.png', 'map_generator/maps/AC53_extend_label.png', 'map_generator/maps/AC53_trunc_blank.png', 'map_generator/maps/AC53_trunc_label.png', 'map_generator/maps/AC54_extend_blank.png', 'map_generator/maps/AC54_extend_label.png', 'map_generator/maps/AC54_trunc_blank.png', 'map_generator/maps/AC54_trunc_label.png', 'map_generator/maps/E1_extend_blank.png', 'map_generator/maps/E1_extend_label.png', 'map_generator/maps/E1_trunc_blank.png', 'map_generator/maps/E1_trunc_label.png', 'map_generator/maps/E2_extend_blank.png', 'map_generator/maps/E2_extend_label.png', 'map_generator/maps/E2_trunc_blank.png', 'map_generator/maps/E2_trunc_label.png', 'map_generator/maps/E3_extend_blank.png', 'map_generator/maps/E3_extend_label.png', 'map_generator/maps/E3_trunc_blank.png', 'map_generator/maps/E3_trunc_label.png', 'map_generator/maps/E4_extend_blank.png', 'map_generator/maps/E4_extend_label.png', 'map_generator/maps/E4_trunc_blank.png', 'map_generator/maps/E4_trunc_label.png', 'map_generator/maps/E5_extend_blank.png', 'map_generator/maps/E5_extend_label.png', 'map_generator/maps/E5_trunc_blank.png', 'map_generator/maps/E5_trunc_label.png', 'map_generator/maps/E6_extend_blank.png', 'map_generator/maps/E6_extend_label.png', 'map_generator/maps/E6_trunc_blank.png', 'map_generator/maps/E6_trunc_label.png', 'map_generator/maps/E7_extend_blank.png', 'map_generator/maps/E7_extend_label.png', 'map_generator/maps/E7_trunc_blank.png', 'map_generator/maps/E7_trunc_label.png', 'map_generator/maps/E8_extend_blank.png', 'map_generator/maps/E8_extend_label.png', 'map_generator/maps/E8_trunc_blank.png', 'map_generator/maps/E8_trunc_label.png', 'map_generator/maps/E9_extend_blank.png', 'map_generator/maps/E9_extend_label.png', 'map_generator/maps/E9_trunc_blank.png', 'map_generator/maps/E9_trunc_label.png', 'map_generator/maps/E10_extend_blank.png', 'map_generator/maps/E10_extend_label.png', 'map_generator/maps/E10_trunc_blank.png', 'map_generator/maps/E10_trunc_label.png', 'map_generator/maps/E11_extend_blank.png', 'map_generator/maps/E11_extend_label.png', 'map_generator/maps/E11_trunc_blank.png', 'map_generator/maps/E11_trunc_label.png', 'map_generator/maps/E12_extend_blank.png', 'map_generator/maps/E12_extend_label.png', 'map_generator/maps/E12_trunc_blank.png', 'map_generator/maps/E12_trunc_label.png', 'map_generator/maps/E13_extend_blank.png', 'map_generator/maps/E13_extend_label.png', 'map_generator/maps/E13_trunc_blank.png', 'map_generator/maps/E13_trunc_label.png', 'map_generator/maps/E14_extend_blank.png', 'map_generator/maps/E14_extend_label.png', 'map_generator/maps/E14_trunc_blank.png', 'map_generator/maps/E14_trunc_label.png', 'map_generator/maps/E15_extend_blank.png', 'map_generator/maps/E15_extend_label.png', 'map_generator/maps/E15_trunc_blank.png', 'map_generator/maps/E15_trunc_label.png', 'map_generator/maps/E16_extend_blank.png', 'map_generator/maps/E16_extend_label.png', 'map_generator/maps/E16_trunc_blank.png', 'map_generator/maps/E16_trunc_label.png', 'map_generator/maps/E17_extend_blank.png', 'map_generator/maps/E17_extend_label.png', 'map_generator/maps/E17_trunc_blank.png', 'map_generator/maps/E17_trunc_label.png', 'map_generator/maps/E18_extend_blank.png', 'map_generator/maps/E18_extend_label.png', 'map_generator/maps/E18_trunc_blank.png', 'map_generator/maps/E18_trunc_label.png', 'map_generator/maps/E19_extend_blank.png', 'map_generator/maps/E19_extend_label.png', 'map_generator/maps/E19_trunc_blank.png', 'map_generator/maps/E19_trunc_label.png', 'map_generator/maps/E20_extend_blank.png', 'map_generator/maps/E20_extend_label.png', 'map_generator/maps/E20_trunc_blank.png', 'map_generator/maps/E20_trunc_label.png', 'map_generator/maps/E21_extend_blank.png', 'map_generator/maps/E21_extend_label.png', 'map_generator/maps/E21_trunc_blank.png', 'map_generator/maps/E21_trunc_label.png', 'map_generator/maps/E22_extend_blank.png', 'map_generator/maps/E22_extend_label.png', 'map_generator/maps/E22_trunc_blank.png', 'map_generator/maps/E22_trunc_label.png', 'map_generator/maps/E23_extend_blank.png', 'map_generator/maps/E23_extend_label.png', 'map_generator/maps/E23_trunc_blank.png', 'map_generator/maps/E23_trunc_label.png', 'map_generator/maps/E24_extend_blank.png', 'map_generator/maps/E24_extend_label.png', 'map_generator/maps/E24_trunc_blank.png', 'map_generator/maps/E24_trunc_label.png', 'map_generator/maps/E25_extend_blank.png', 'map_generator/maps/E25_extend_label.png', 'map_generator/maps/E25_trunc_blank.png', 'map_generator/maps/E25_trunc_label.png', 'map_generator/maps/E26_extend_blank.png', 'map_generator/maps/E26_extend_label.png', 'map_generator/maps/E26_trunc_blank.png', 'map_generator/maps/E26_trunc_label.png', 'map_generator/maps/E27_extend_blank.png', 'map_generator/maps/E27_extend_label.png', 'map_generator/maps/E27_trunc_blank.png', 'map_generator/maps/E27_trunc_label.png', 'map_generator/maps/E28_extend_blank.png', 'map_generator/maps/E28_extend_label.png', 'map_generator/maps/E28_trunc_blank.png', 'map_generator/maps/E28_trunc_label.png', 'map_generator/maps/E29_extend_blank.png', 'map_generator/maps/E29_extend_label.png', 'map_generator/maps/E29_trunc_blank.png', 'map_generator/maps/E29_trunc_label.png', 'map_generator/maps/E30_extend_blank.png', 'map_generator/maps/E30_extend_label.png', 'map_generator/maps/E30_trunc_blank.png', 'map_generator/maps/E30_trunc_label.png', 'map_generator/maps/E31_extend_blank.png', 'map_generator/maps/E31_extend_label.png', 'map_generator/maps/E31_trunc_blank.png', 'map_generator/maps/E31_trunc_label.png', 'map_generator/maps/E32_extend_blank.png', 'map_generator/maps/E32_extend_label.png', 'map_generator/maps/E32_trunc_blank.png', 'map_generator/maps/E32_trunc_label.png', 'map_generator/maps/E33_extend_blank.png', 'map_generator/maps/E33_extend_label.png', 'map_generator/maps/E33_trunc_blank.png', 'map_generator/maps/E33_trunc_label.png', 'map_generator/maps/E34_extend_blank.png', 'map_generator/maps/E34_extend_label.png', 'map_generator/maps/E34_trunc_blank.png', 'map_generator/maps/E34_trunc_label.png', 'map_generator/maps/E35_extend_blank.png', 'map_generator/maps/E35_extend_label.png', 'map_generator/maps/E35_trunc_blank.png', 'map_generator/maps/E35_trunc_label.png', 'map_generator/maps/E36_extend_blank.png', 'map_generator/maps/E36_extend_label.png', 'map_generator/maps/E36_trunc_blank.png', 'map_generator/maps/E36_trunc_label.png', 'map_generator/maps/E37_extend_blank.png', 'map_generator/maps/E37_extend_label.png', 'map_generator/maps/E37_trunc_blank.png', 'map_generator/maps/E37_trunc_label.png', 'map_generator/maps/E38_extend_blank.png', 'map_generator/maps/E38_extend_label.png', 'map_generator/maps/E38_trunc_blank.png', 'map_generator/maps/E38_trunc_label.png', 'map_generator/maps/E39_extend_blank.png', 'map_generator/maps/E39_extend_label.png', 'map_generator/maps/E39_trunc_blank.png', 'map_generator/maps/E39_trunc_label.png', 'map_generator/maps/E40_extend_blank.png', 'map_generator/maps/E40_extend_label.png', 'map_generator/maps/E40_trunc_blank.png', 'map_generator/maps/E40_trunc_label.png', 'map_generator/maps/E41_extend_blank.png', 'map_generator/maps/E41_extend_label.png', 'map_generator/maps/E41_trunc_blank.png', 'map_generator/maps/E41_trunc_label.png', 'map_generator/maps/E42_extend_blank.png', 'map_generator/maps/E42_extend_label.png', 'map_generator/maps/E42_trunc_blank.png', 'map_generator/maps/E42_trunc_label.png', 'map_generator/maps/E43_extend_blank.png', 'map_generator/maps/E43_extend_label.png', 'map_generator/maps/E43_trunc_blank.png', 'map_generator/maps/E43_trunc_label.png', 'map_generator/maps/E44_extend_blank.png', 'map_generator/maps/E44_extend_label.png', 'map_generator/maps/E44_trunc_blank.png', 'map_generator/maps/E44_trunc_label.png', 'map_generator/maps/E45_extend_blank.png', 'map_generator/maps/E45_extend_label.png', 'map_generator/maps/E45_trunc_blank.png', 'map_generator/maps/E45_trunc_label.png', 'map_generator/maps/E46_extend_blank.png', 'map_generator/maps/E46_extend_label.png', 'map_generator/maps/E46_trunc_blank.png', 'map_generator/maps/E46_trunc_label.png', 'map_generator/maps/E47_extend_blank.png', 'map_generator/maps/E47_extend_label.png', 'map_generator/maps/E47_trunc_blank.png', 'map_generator/maps/E47_trunc_label.png', 'map_generator/maps/E48_extend_blank.png', 'map_generator/maps/E48_extend_label.png', 'map_generator/maps/E48_trunc_blank.png', 'map_generator/maps/E48_trunc_label.png', 'map_generator/lists/list1.csv', 'map_generator/lists/list2.csv', 'map_generator/lists/list3.csv', 'map_generator/lists/list4.csv', 'info/info1.png', 'info/info2.png', 'info/info3.png', 'info/info4.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = BZ
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        slider.granularity = float(granularity)
    TextComponent sentence_text
      letterHeight = 0.03
      pos = (0, 0.39)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
      wrapWidth = 1.2
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    ImageComponent image
      image [set every repeat] = $file_path
      pos = (0, 0.06)
      size = (0.6, 0.43)
      startVal [time (s)] = 0.0
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    TextComponent question_text
      letterHeight = 0.03
      pos = (0, -0.24)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    SliderComponent slider
      color = White
      fillColor = White
      forceEndRoutine = False
      labels = ('Not very severe', 'Very severe')
      letterHeight = 0.03
      pos = (0, -0.35)
      size = (0.5, 0.04)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2)
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    KeyboardComponent spacebar_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider.rating
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    CodeComponent counter_code
      Code Type = Auto->JS
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      Begin Experiment:
        trial_counter = 0
        counter_text = None
      Begin Routine:
        trial_counter = trial_counter + 1
        counter_text = "Trial " + str(trial_counter) + " of 80"
    TextComponent trial_counter_text
      letterHeight = 0.025
      pos = (0.5, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter_text
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    TextComponent spacebar_text
      letterHeight = 0.02
      pos = (0, -0.46)
      startVal [time (s)] = 0.0
      text = Press the 'spacebar' to continue when you have made your response.
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  Routine instructions1
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent slide_number
      letterHeight = 0.025
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $slide_text
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    TextComponent instruction_text
      letterHeight = 0.04
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
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    TextComponent spacebar_3
      letterHeight = 0.025
      pos = (0, -0.44)
      startVal [time (s)] = 0.0
      text = Press the 'spacebar' to move on to the next slide.
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    ImageComponent instruction_image
      image = images/pointed_maps_images/9cs.jpeg
      pos = (0, -0.075)
      size = (0.36, 0.36)
      startVal [time (s)] = 0.0
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    TextComponent EXsentence1
      color = lightgrey
      letterHeight = 0.03
      pos = (0, 0.14)
      startVal [time (s)] = 0.0
      text = This map shows the levels of a certain type of pollution in this country:
      wrapWidth = 1.4
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    KeyboardComponent next_slide_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent question_text_2
      color = lightgrey
      letterHeight = 0.03
      pos = (0, -0.29)
      startVal [time (s)] = 0.0
      text = How severe do you think the environmental pollution in this pointed region is?
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    ImageComponent slider_image
      image = images/slider_image.png
      pos = (0, -0.37)
      size = (0.6, 0.09)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle
      fillColor = white
      ori = 180
      pos [set every frame] = (triangle_pos, -0.335)
      shape = triangle
      size = (0.06, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent arrow
      letterHeight = 0.1
      pos [set every repeat] = (arrow_posx, arrow_posy)
      startVal [time (s)] = 0.0
      text = →
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  Routine sh
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $display
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Would you like to try again?
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.keys == 'n':
            trials_2.finished = True
  Routine comments
    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      letterHeight = 0.04
      padding = 0.05
      pos = (0, -0.05)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = continue_box
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent continue_box
      fillColor = black
      pos = (0, -0.4)
      shape = rectangle
      size = (0.17, 0.06)
      startVal [time (s)] = 0.0
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    TextComponent continue_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
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    CodeComponent total_duration
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData("total_duration", timeStart.getTime())  # to get the time
    TextComponent comment_instructions
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = What strategies did you use during the study? Do you have any comments about the study? (optional)
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  Routine intro
    TextComponent intro_text2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        IMPORTANT: Your browser should now be in full-screen mode. Please do not exit full-screen mode.

        You must complete this experiment using either a laptop or desktop computer.

        Please do not complete the experiment twice if you experience issues, contact the researcher on Prolific.

        Please read the following information sheet.

        Press the 'spacebar' to continue.
    KeyboardComponent intro_continue2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        timeStart = core.Clock() # to instantiate a clock object
      Begin JS Experiment:
        timeStart = new util.Clock();
  Routine info_sheet
    CodeComponent info_sheet_code
      Code Type = Auto->JS
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      Begin Experiment:
        current_display = 1
      Begin Routine:
        current_str = str(current_display)

        display_this = "info/A7_Project1_PIS-" + current_str + ".png"

        counter_text = "Page " + current_str + " of 4"
      Each Frame:
        if end_loop.keys == 'return':
            continueRoutine = False
      End Routine:
        if info_sheet_move.keys == 'right' and current_display < 4:
            current_display = current_display + 1
        elif info_sheet_move.keys == 'left' and current_display > 1:
            current_display = current_display - 1

        if end_loop.keys == 'return':
            info_sheet_loop.finished = True
    KeyboardComponent end_loop
      allowedKeys = 'return',
      correctAns = $'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent info_sheet_image
      image [set every repeat] = $display_this
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.05, 0.7)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent info_sheet_move
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent counter
      letterHeight = 0.03
      pos = (0, -0.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter_text
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    TextComponent move_text
      letterHeight = 0.035
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use your arrow keys '←' '→' to view the next page (or previous page).
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    TextComponent info_sheet_next
      letterHeight = 0.025
      pos = (0, -0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        When you have finished reading page 4 of 4, press 'Enter/Return' to move on to the consent form.
        If you do not wish to continue, press ‘Escape’ to quit the experiment.
  Routine consent
    TextComponent study_title
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Decision-Making With Maps
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    TextComponent item_text
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $consent_item
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    TextComponent keypress_instructions
      letterHeight = 0.025
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ‘y’ if you consent to the above.
        Otherwise, press ‘Escape’ to quit the experiment.

        The personal information we collect and use to conduct this research will be processed in accordance with UK data protection law as explained in the Participant Information Sheet and the Privacy Notice for Research Participants: documents.manchester.ac.uk/display.aspx?DocID=37095
    KeyboardComponent consent_key
      allowedKeys = 'y',
      correctAns = $'y',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
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  Routine literacy
    TextComponent literacy_top
      letterHeight = 0.03
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please answer the following questions about using graphs and charts. Click on the slider next to each question to indicate your response. Press the 'spacebar' when you have finished:
      wrapWidth = 1.3
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    TextComponent questions_text
      letterHeight = 0.03
      pos = (-0.4, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text:
        How good are you at working with bar charts?



        How good are you at working with line plots?



        How good are you at working with pie charts?



        How good are you at inferring the size of a bar in a bar chart?



        How good are you at determining the difference between two bars in a bar chart?
    SliderComponent q1_slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.022
      pos = (0.39, 0.27)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q2_slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.022
      pos = (0.39, 0.13)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q3_slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.022
      pos = (0.39, -0.02)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q4_slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.022
      pos = (0.39, -0.16)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q5_slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.022
      pos = (0.39, -0.33)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    KeyboardComponent spacebar_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = all_ratings
      store = nothing
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        all_ratings = false;
        questions_text.setAlignHoriz('left')
        literacy_top.setAlignHoriz('left')
      Begin Routine:
        all_ratings = False
        questions_text.alignText = 'right'
      Each Frame:
        all_ratings = (q1_slider.rating != None) & (q2_slider.rating != None) & (q3_slider.rating != None) & (q4_slider.rating != None) & (q5_slider.rating != None)
      Each JS Frame:
        all_ratings = (((((q1_slider.rating > 0) & (q2_slider.rating > 0)) & (q3_slider.rating > 0)) & (q4_slider.rating > 0)) & (q5_slider.rating > 0));
  Routine final
    TextComponent final_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has now finished.

        Please press the 'spacebar' and follow all the instructions to complete your submission.

        Thank you for taking part.
    KeyboardComponent final_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine education
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        edu_labels = ['No formal qualications',
        'Secondary education (e.g. GED/GCSE)',
        'High school diploma/A-levels',
        'Technical/community college',
        'Undergraduate degree (BA/BSc/other)',
        'Graduate degree (MA/MSc/MPhil/other)',
        'Doctorate degree (PhD/other)',
        'Don\'t know / not applicable']

        edu_labels.reverse()
    TextComponent edu_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select the highest level of education you have completed so far. Press the 'spacebar' when you have finished.
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    SliderComponent edu_slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = edu_labels
      letterHeight = 0.03
      ori = -0
      pos = (0, -0.05)
      saveStartStop = False
      size = (0.03, 0.5)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1,2,3,4,5,6,7,8)
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    KeyboardComponent spacebar_continue_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = edu_slider.rating
      store = nothing
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  Routine demographics
    TextboxComponent ageResp
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (-0.07, 0.23)
      size = (0.14, 0.04)
      startVal [time (s)] = 0
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    TextComponent age
      letterHeight = 0.03
      pos = (0, 0.28)
      startVal [time (s)] = 0.0
      text = Please enter your age (in years):
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    TextComponent gender
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How would you describe your gender?
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    SliderComponent genderResp1
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ("Prefer not to say", "In another way:", "Non-binary", "Man", "Woman")
      letterHeight = 0.035
      pos = (-0.19, -0.05)
      size = (0.015, 0.15)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextboxComponent genderResp2
      anchor = center-left
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.025
      pos = (0.1, -0.09)
      size = (0.15, 0.04)
      startVal [time (s)] = 0
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    PolygonComponent continue_box_2
      fillColor = black
      pos = (0, -0.4)
      shape = rectangle
      size = (0.17, 0.06)
      startVal [time (s)] = 0.0
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    TextComponent continue_text_2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent mouse_3
      clickable = continue_box_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = ageResp.text and genderResp1.rating
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  Routine debrief
    TextComponent debrief_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        IMPORTANT: Your submission is not yet completed, so please do not quit the experiment. Continue to follow all instructions so that your submission can be completed.

        Please note that the standarised units and all pollution data presented in this experiment were fictional.
    KeyboardComponent spacebar_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = all keys
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    TextComponent spacebar_debrief
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the 'spacebar' to continue.
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    CodeComponent text_align_4
      Code Type = Both
      Begin JS Routine:
        debrief_text.setAlignHoriz('left')
  Routine debrief_2
    TextComponent debrief_text_2
      color = black
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = IMPORTANT: Please read the following information carefully. Your submission is not yet completed, so please do not quit the experiment. You must continue to the next page and follow additional instructions after reading the information below, so that your submission can be completed. Please note that all the information presented in this experiment was fictional. We hope that you have not been upset by any aspect of this experiment. However, if you have found any part of this experience to be distressing, please take the time to allow your mood to return to a baseline level. You may want to sit in a quiet and comfortable space, have a drink of water, or engage an activity that you enjoy. If you would like more information on this study, please contact the researchers by sending a message on Prolific. 
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    KeyboardComponent spacebar_continue_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = all keys
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    TextComponent spacebar_debrief_2
      color = black
      letterHeight = 0.025
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    CodeComponent text_align
      Code Type = Both
      Begin JS Routine:
        debrief_text.setAlignHoriz('left')
  Routine welcome
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome!
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  Routine additional_question
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        scale_labels = ['A', 'B']

        scale_labels.reverse()
    TextComponent section_text
      letterHeight = 0.025
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Additional Question
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    TextComponent ad_question_text1
      letterHeight = 0.04
      pos = (0, 0.29)
      startVal [time (s)] = 0.0
      text = Which scale do you think is more suitable to represent the data?
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    ImageComponent scales_images
      image = images/two_scales.JPEG
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent add_question_text2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Please choose from "A" or "B":
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    SliderComponent scale_slider
      borderColor = 1.0000, 1.0000, 1.0000
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = scale_labels
      letterHeight = 0.04
      pos = (0, -0.33)
      saveStartStop = False
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2)
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    TextComponent next_slide_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.02
      pos = (0, -0.44)
      startVal [time (s)] = 0.0
      text = Press the 'spacebar' to continue.
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    KeyboardComponent spacebar_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = scale_slider.rating
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Flow
  Routine intro
  LoopInitiator info_sheet_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine info_sheet
  LoopTerminator info_sheet_loop
  LoopInitiator consent_loop loopType="TrialHandler"
    conditionsFile = consent.csv
    loopType = sequential
    nReps = 1
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    Routine consent
  LoopTerminator consent_loop
  Routine demographics
  Routine education
  Routine literacy
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = wenqi_instructions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide_text', 'Slide 1 of 8'), ('instruction', 'This experiment is about using information to make decisions. Each trial will look similar to this:'), ('triangle_pos', 10.0), ('arrow_posy', 10.0), ('arrow_posx', 10.0)]),
      OrderedDict([('slide_text', 'Slide 2 of 8'), ('instruction', 'First, you should read the text above the image.'), ('triangle_pos', 10.0), ('arrow_posy', 0.15), ('arrow_posx', -0.55)]),
      OrderedDict([('slide_text', 'Slide 3 of 8'), ('instruction', 'Then you should look at the image. It will show a map of a country. The colour of each region of the country reflects its pollution level. Pollution levels are displayed in standardised units.'), ('triangle_pos', 10.0), ('arrow_posy', -0.075), ('arrow_posx', -0.24)]),
      OrderedDict([('slide_text', 'Slide 4 of 8'), ('instruction', 'Data on different types of pollution are shown throughout the experiment. (A colour scale may be provided or not provided to you.)'), ('triangle_pos', 10.0), ('arrow_posy', -0.075), ('arrow_posx', -0.24)]),
      OrderedDict([('slide_text', 'Slide 5 of 8'), ('instruction', 'Then you should read the question below the image. Here, the question asks you to rate how severe the pollution levels in the pointed region is.'), ('triangle_pos', 10.0), ('arrow_posy', -0.28), ('arrow_posx', -0.53)]),
      OrderedDict([('slide_text', 'Slide 6 of 8'), ('instruction', 'You should move the marker to indicate your response.'), ('triangle_pos', 0.0), ('arrow_posy', -0.36), ('arrow_posx', -0.45)])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
    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = all_trials_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_no': 1, 'sentence': 'This map shows the levels of a certain type of pollution in this country:', 'question': 'How severe do you think the environmental pollution in this pointed region is?', 'correct_option': 'NA', 'granularity': 0, 'file_name': '1cs', 'file_path': 'images/all_images/1cs.jpeg'},
      {'item_no': 2, 'sentence': 'This map shows the levels of a certain type of pollution in this country:', 'question': 'How severe do you think the environmental pollution in this pointed region is?', 'correct_option': 'NA', 'granularity': 0, 'file_name': '2cn', 'file_path': 'images/all_images/2cn.jpeg'},
      {'item_no': 3, 'sentence': 'This map shows the levels of a certain type of pollution in this country:', 'question': 'How severe do you think the environmental pollution in this pointed region is?', 'correct_option': 'NA', 'granularity': 0, 'file_name': '3is', 'file_path': 'images/all_images/3is.jpeg'},
      {'item_no': 4, 'sentence': 'This map shows the levels of a certain type of pollution in this country:', 'question': 'How severe do you think the environmental pollution in this pointed region is?', 'correct_option': 'NA', 'granularity': 0, 'file_name': '4in', 'file_path': 'images/all_images/4in.jpeg'}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
    Routine trial
  LoopTerminator trials
  Routine additional_question
  Routine debrief
  Routine comments
  Routine final
